PsychoPy2experiment version="2026.2.4"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = (1024, 768)
  color = $[255,255,255]
  expName = ai_judgement
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        # trial = ( '/img_path', ai_input, correct_response )

        import random
        random.seed(expInfo['participant'].lower())

        trial_data = [
            ['photos/city3_distorted.png', 'AI: This is an image of the Statue of Liberty.', 'no'],
            ['photos/human1_distorted.png', 'AI Input: This is an image of a human.', 'no'],
            ['photos/garden_distorted.png', 'AI Input: This is an image of a garden.', 'no'],
            ['photos/flower_distorted.png', 'AI Input: This is an image of a chicken.', 'no'],
            ['photos/bike_distorted.png', 'AI Input: This is an image of a lizard.', 'no'],
            ['photos/peaches_distorted.png', 'AI Input: This is an image of an owl.', 'no'],
            ['photos/rock2_distorted.png', 'The background is green.', 'no'],
            ['photos/teapot_distorted.png', 'The image has 50% noise.', 'no'],
            ['photos/armchair_distorted.png', 'The image is blurry.', 'no'],
            ['photos/mushroom_distorted.png', 'The background is dark green.', 'no'],
            ['photos/jackfruit_distorted.png', 'There is a dark vertical line in this image.', 'no'],
            ['photos/nature_distorted.png', 'There are green shapes in this image.', 'no'],
            ['photos/crab_distorted.png', 'AI Input: This is an image of a rock', 'yes'],
            ['photos/cat1_distorted.png', 'AI Input: There are two lines in the background', 'yes'],
            ['photos/crow_distorted.png','AI Input: This is an Image of a bird', 'yes'],
            ['photos/deer_distorted.png', 'AI Input: This is an image of a deer', 'yes'],
            ['photos/dog2_distorted.png', 'AI Input: This is an image of a patch of flowers', 'yes'],
            ['photos/gorilla1_distorted.png', 'AI Input: This image has the color green', 'yes'],
            ['photos/gopher_distorted.png', 'AI Input: This image has grain', 'yes'],
            ['photos/monkey_distorted.png', 'AI Input: This is an image of a monkey', 'yes'],
            ['photos/lion_distorted.png', 'AI Input: This image is blurry', 'yes'],
            ['photos/owl_distorted.png', 'AI Input: This is an image of a football', 'yes'],
            ['photos/zebra_distorted.png',  'AI Input: This image has many colors', 'yes'],
            ['photos/cat2_distorted.png', 'AI Input: There is black', 'yes']
        ]

        num_trials = len(trial_data)

        random.shuffle(trial_data)
      Begin Routine:
        img, ai_input, correct_response = trial_data[trials.thisRepN]
      End Routine:
        trial_data[trials.thisRepN].append(response)
    TextComponent prompt
      color = black
      letterHeight = 0.05
      pos = (0, .8)
      startVal [time (s)] = 0.0
      text [set every repeat] = Is a non-human animal present in this image?
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    ImageComponent image
      image [set every repeat] = $img
      pos = (0, 0.1)
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent AI_input
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ai_input
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    ButtonComponent yes_button
      bold = True
      callback = response = 'yes'
      fillColor = $(-0.6078, 0.6078, -0.6078)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, -0.7)
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = yes
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    ButtonComponent no_button
      bold = True
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, -0.7)
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = no
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      callback:
        response = 'no'
  Routine finished
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    CodeComponent write_data
      Code Type = Py
      Begin Routine:
        import pandas

        session_df = pandas.DataFrame(trial_data,
                                 columns = ["image", "AI input", "correct answer", "response"])

        session_df.to_csv('output/' + expInfo['participant'] + '.csv')
  Routine instr
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    TextComponent text
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        In this experiment, you will be asked to identify whether an animal is present in each image.

        A human does not count as an animal.

        Please answer as quickly and accurately as possible.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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  Routine form
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    FormComponent ai_questions
      Data Format = rows
      Font = Noto Sans
      Item Padding = 0.05
      Items = demographics_form.csv
      Randomize = False
      Style = light
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 1)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.3, -.3)
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = Continue
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = num_trials
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    Routine trial
  LoopTerminator trials
  Routine finished
